PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 960]
  expName = ae
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Routines
  Routine instr
    TextComponent text_instr
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = 欢迎参加本次实验!
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    TextComponent text_space
      letterHeight = 0.05
      pos = [0,-0.2]
      startVal [time (s)] = 0.0
      text = 按空格键继续
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    KeyboardComponent end_instr
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine presentation
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = 听一听
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    SoundComponent sound_intro
      sound = sounds\intro.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    SoundComponent sound_1
      sound [set every repeat] = $sound1
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1
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    SoundComponent sound_2
      sound [set every repeat] = $sound2
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1
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    KeyboardComponent key_judge
      allowedKeys = 'left','right','down'
      forceEndRoutine = True
      startVal [time (s)] = 3.5
      store = all keys
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  Routine thanks
    TextComponent text_thanks
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        实验结束！
        感谢您参加本次实验！
        按回车键（Enter）结束实验
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instr
  LoopInitiator loop loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [OrderedDict([('sound1', 'i'), ('sound2', 'y')]),
      OrderedDict([('sound1', 'i'), ('sound2', 'u')]),
      OrderedDict([('sound1', 'u'), ('sound2', 'y')])]
    Routine presentation
  LoopTerminator loop
  Routine thanks
