PsychoPy2experiment version="2021.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1440, 960]
  expName = jinhu_rusheng
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Routines
  Routine instruct
    TextComponent instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        欢迎参加实验！

        接下来，您将听到很多字的读音
        同时屏幕上一左一右会呈现两个汉字
        如果读音更像左边的字，请按←键
        如果读音更像右边的字，请按→键
        如果您无法判断或者觉得都不像，请按↓键

        按空格键开始实验!
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
    TextComponent left_word_tip
      letterHeight = 0.1
      pos = (-0.2, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $left_word
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    TextComponent right_word_tip
      letterHeight = 0.1
      pos = (0.2, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $right_word
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    TextComponent tip
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = ←像左边   ↓不确定   →像右边
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    KeyboardComponent operate
      allowedKeys [set every repeat] = 'left','right','down'
      correctAns = $correct_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    SoundComponent my_sound_play
      durationEstim = 2
      sound [set every repeat] = $my_sound
      startVal [time (s)] = 0.0
      volume = 3
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  Routine thanks
    TextComponent thank_word
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        非常感谢您的参与！

        您的付出会对我们的研究起到巨大帮助！

        按空格键退出实验
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [{'my_sound': 'sounds\\ba_0d5.wav', 'left_word': '坝', 'right_word': '剥', 'correct_ans': 'left'},
      {'my_sound': 'sounds\\ba_0d6.wav', 'left_word': '坝', 'right_word': '剥', 'correct_ans': 'left'},
      {'my_sound': 'sounds\\ba_0d7.wav', 'left_word': '坝', 'right_word': '剥', 'correct_ans': 'left'},
      {'my_sound': 'sounds\\ba_0d8.wav', 'left_word': '坝', 'right_word': '剥', 'correct_ans': 'left'},
      {'my_sound': 'sounds\\ba_0d9.wav', 'left_word': '坝', 'right_word': '剥', 'correct_ans': 'left'},
      {'my_sound': 'sounds\\ba_1d0.wav', 'left_word': '坝', 'right_word': '剥', 'correct_ans': 'left'},
      {'my_sound': 'sounds\\bae_1d0.wav', 'left_word': '坝', 'right_word': '剥', 'correct_ans': 'right'},
      {'my_sound': 'sounds\\bae_1d1.wav', 'left_word': '坝', 'right_word': '剥', 'correct_ans': 'right'},
      {'my_sound': 'sounds\\bae_1d2.wav', 'left_word': '坝', 'right_word': '剥', 'correct_ans': 'right'},
      {'my_sound': 'sounds\\bae_1d3.wav', 'left_word': '坝', 'right_word': '剥', 'correct_ans': 'right'},
      {'my_sound': 'sounds\\bae_1d4.wav', 'left_word': '坝', 'right_word': '剥', 'correct_ans': 'right'},
      {'my_sound': 'sounds\\bae_1d5.wav', 'left_word': '坝', 'right_word': '剥', 'correct_ans': 'right'},
      {'my_sound': 'sounds\\bae_1d6.wav', 'left_word': '坝', 'right_word': '剥', 'correct_ans': 'right'},
      {'my_sound': 'sounds\\bae_1d7.wav', 'left_word': '坝', 'right_word': '剥', 'correct_ans': 'right'},
      {'my_sound': 'sounds\\bae_1d8.wav', 'left_word': '坝', 'right_word': '剥', 'correct_ans': 'right'}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
    Routine trial
  LoopTerminator trials
  Routine thanks
